PsychoPy2experiment version="3.2.4"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'condition': '1', 'language': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = Ruhe_EEG
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if int(expInfo['language']) == 1:
            Anweisungen = Anweisung_D
            Anweisungen2 = Anweisung2_D

        if int(expInfo['language']) == 2:
            Anweisungen = Anweisung_E
            Anweisungen2 = Anweisung2_E

        if int(expInfo['language']) == 3:
            Anweisungen = Anweisung_F
            Anweisungen2 = Anweisung2_F

        if int(expInfo['language']) == 4:
            Anweisungen = Anweisung_S
            Anweisungen2 = Anweisung2_S


        if int(expInfo['language']) == 5:
            Anweisungen = Anweisung_R
            Anweisungen2 = Anweisung2_R


        if int(expInfo['condition']) == 1:
            Trigger = Trigger2
            sound_1.setSound(Anweisungen)

        if int(expInfo['condition']) == 2:
            Trigger = Trigger3
            sound_1.setSound(Anweisungen2)
    SoundComponent sound_1
      sound [set every repeat] = $Anweisung
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ParallelOutComponent p_port
      address = 0x0378
      disabled = True
      startData = $Trigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.015
      syncScreen = True
      syncScreenRefresh = False
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  Routine Start_Ruhe_EEG
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if int(expInfo['language']) == 1:
            Anfang2 = Anfang_D

        if int(expInfo['language']) == 2:
            Anfang2 = Anfang_E


        if int(expInfo['language']) == 3:
            Anfang2 = Anfang_F

        if int(expInfo['language']) == 4:
            Anfang2 = Anfang_S

        if int(expInfo['language']) == 5:
            Anfang2 = Anfang_R
    SoundComponent sound_4
      sound [set every repeat] = $Anfang2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Ende_Ruhe_EEG
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if int(expInfo['language']) == 1:
            Ende2 = Ende_D

        if int(expInfo['language']) == 2:
            Ende2 = Ende_E

        if int(expInfo['language']) == 3:
            Ende2 = Ende_F

        if int(expInfo['language']) == 4:
            Ende2 = Ende_S

        if int(expInfo['language']) == 5:
            Ende2 = Ende_R
    SoundComponent sound_3
      sound [set every repeat] = $Ende2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Instruktion_ruhe_eeg
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        event.Mouse(visible=False)

        if int(expInfo['language']) == 1:
            Instruction2 = Instruktion_D
            Texter1 = 'Starten mit der Leertaste'

        if int(expInfo['language']) == 2:
            Instruction2 = Instruktion_E
            Texter1 = 'Press space to start'


        if int(expInfo['language']) == 3:
            Instruction2 = Instruktion_F
            Texter1 = 'Appuyez sur l´ espace pour commencer'


        if int(expInfo['language']) == 4:
            Instruction2 = Instruktion_S
            Texter1 = 'Pulse el espacio para empezar'


        if int(expInfo['language']) == 5:
            Instruction2 = Instruktion_R
            Texter1 = 'Нажмите пробел, чтобы начать'
    SoundComponent sound_2
      sound [set every repeat] = $Instruction2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 47
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 47
      text [set every repeat] = $Texter1
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 47
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Flow
  LoopInitiator total loopType="TrialHandler"
    conditions = [{'Instruktion': 'G:\\NACHSTUDIUM\\Doktorarbeit\\VIRTUELLES\\Hauptstudie\\Ruhe_EEG_film_VR\\audio\\start_aufzeichnung.wav', 'Ende': 'G:\\NACHSTUDIUM\\Doktorarbeit\\VIRTUELLES\\Hauptstudie\\Ruhe_EEG_film_VR\\audio\\ende_aufzeichnung.wav'}]
    conditionsFile = Gesamt.xlsx
    loopType = sequential
    nReps = 1
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    Routine Instruktion_ruhe_eeg
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Start_Ruhe_EEG.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Anfang': 'G:\\NACHSTUDIUM\\Doktorarbeit\\VIRTUELLES\\Hauptstudie\\Ruhe_EEG_film_VR\\audio\\start_aufzeichnung.wav'},
        {'Anfang': 'G:\\NACHSTUDIUM\\Doktorarbeit\\VIRTUELLES\\Hauptstudie\\Ruhe_EEG_film_VR\\audio\\entspannen.wav'}]
      Routine Start_Ruhe_EEG
    LoopTerminator trials
    LoopInitiator resting_trials loopType="TrialHandler"
      conditions = []
      conditionsFile = Ruhe_eeg_trials.xlsx
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator resting_trials
    Routine Ende_Ruhe_EEG
  LoopTerminator total
